config:
  title: Microtiter Plates
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
library: {name: MicrotiterPlates, category: Microtiter Plates}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Microtiter Plates/PlateLayoutGenerator'

module MicrotiterPlates
  # Convert a letter to the corresponding array index
  #
  # @param letter [String] the letter (usually of a row)
  # @return Fixnum
  def letter_to_index(letter)
    alphabet_array.index(letter.upcase)
  end

  # Convert an array index to the corresponding letter of the alphabet
  #
  # @param index [Fixnum] the index (usually of a row)
  # @return String
  def index_to_letter(index)
    alphabet_array[index]
  end

  # Array of all letters of the alphablet in uppercase
  #
  # @return Array<String>
  def alphabet_array
    ('A'..'Z').to_a
  end

  # Get the alpha component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [String, nil] the first contiguous run of letters or nil if no
  #   letters are found
  def alpha_component(alphanum)
    mtch = alphanum.match(/[[:alpha:]]+/)
    return mtch[0] if mtch
  end

  # Get the numeric component of an alphanumumeric coordinate
  #
  # @param alphanum [String]
  # @return [Fixnum, nil] the first contiguous run of digits or nil if no
  #   digits are found
  def numeric_component(alphanum)
    mtch = alphanum.match(/\d+/)
    return mtch[0].to_i if mtch
  end
end

# Factory class for building `MicrotiterPlate`s
# @author Devin Strickland <strcklnd@uw.edu>
#
class MicrotiterPlateFactory
  # Builds a new `MicrotiterPlate`
  #
  # @param collection [Collection] the `Collection` that is to be managed
  # @param group_size [Fixnum] the size of groups of wells, e.g., corresponding
  #   to replicates (see `PlateLayoutGenerator`)
  # @param method [String] the method for creating a new `PlateLayoutGenerator`
  # @return [MicrotiterPlate]
  def self.build(collection:, group_size:, method:)
    MicrotiterPlate.new(
      collection: collection,
      group_size: group_size,
      method: method
    )
  end
end

# Class for modeling the addition of samples to a microtiter (e.g, 96-well)
#   plate
# @author Devin Strickland <strcklnd@uw.edu>
#
class MicrotiterPlate
  attr_reader :collection

  # Instantiates `MicrotiterPlate`
  #
  # @param collection [Collection] the `Collection` that is to be managed
  # @param group_size [Fixnum] the size of groups of wells, e.g., correspionding
  #   to replicates (see `PlateLayoutGenerator`)
  # @param method [String] the method for creating a new `PlateLayoutGenerator`
  # @return [MicrotiterPlate]
  def initialize(collection:, group_size:, method:)
    @collection = collection
    @plate_layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: method
    )
  end

  # Associates the provided data to the next `PlateLayoutGenerator` index
  #   that does not point to a `Part` that already has a `DataAssociation`
  #   for `key` and returns the index
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Fixnum>]
  def associate_next_empty(key:, data:, column: nil)
    nxt = next_empty(key: key, column: column)
    associate(index: nxt, key: key, data: data)
    nxt
  end

  # Associates the provided data to the next `PlateLayoutGenerator` group
  #   that does not point to any `Part` that already has a `DataAssociation`
  #   for `key` and returns the group
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param data [serializable object]  the data for the association
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Array<Fixnum>>]
  def associate_next_empty_group(key:, data:, column: nil)
    nxt_grp = next_empty_group(key: key, column: column)
    nxt_grp.each { |nxt| associate(index: nxt, key: key, data: data) }
    nxt_grp
  end

  # Returns the next `PlateLayoutGenerator` index that does not point to a
  #   `Part` that already has a `DataAssociation` for `key`
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Fixnum>]
  def next_empty(key:, column: nil)
    nxt = nil
    loop do
      nxt = @plate_layout_generator.next(column: column)
      prt = @collection.part(nxt[0], nxt[1])
      break unless prt.associations[key].present?
    end
    nxt
  end

  # Returns the next `PlateLayoutGenerator` group that does not point to any
  #   `Part` that already has a `DataAssociation` for `key`
  #
  # @param key [String] the key pointing to the relevant `DataAssociation`
  # @param column [Fixnum] an alternative column index to start with
  # @return [Array<Array<Fixnum>>]
  def next_empty_group(key:, column: nil)
    nxt_grp = nil
    loop do
      present = false
      nxt_grp = @plate_layout_generator.next_group(column: column)
      nxt_grp.each do |nxt|
        prt = @collection.part(nxt[0], nxt[1])
        present = true if prt.associations[key].present?
      end
      break unless present
    end
    nxt_grp
  end

  private

  def associate(index:, key:, data:)
    part = @collection.part(index[0], index[1])
    part.associate(key, data)
  end
end

library: {name: PlateLayoutGenerator, category: Microtiter Plates}
code_source:
# frozen_string_literal: true

# Factory class for instantiating `PlateLayoutGenerator`
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGeneratorFactory
  # Instantiates `PlateLayoutGenerator`
  #
  # @param group_size [FixNum] the size of groups of wells, e.g., correspinding
  #   to replicates
  # @return [PlateLayoutGenerator]
  def self.build(group_size: 1, method: nil)
    PlateLayoutGenerator.new(group_size: group_size, method: method)
  end
end

# Provides individual indices or batches of indices from a microtiter plate, in
#   order from top left ,and yielding each index only once
#
# @author Devin Strickland <strcklnd@uw.edu>
class PlateLayoutGenerator
  def initialize(group_size: 1, method: nil)
    @group_size = group_size
    method ||= :cdc_sample_layout
    @layout = send(method)
  end

  def next(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i)
  end

  def next_group(column: nil)
    i = column ? first_index_in(column) : 0
    @layout.slice!(i, @group_size)
  end

  private

  def first_index_in(column)
    @layout.index { |x| x[1] == column }
  end

  def cdc_sample_layout
    lyt = []
    [0, 4].each do |j|
      cols = Array.new(12) { |c| c }
      cols.each { |c| @group_size.times { |i| lyt << [i + j, c] } }
    end
    lyt
  end

  # @todo make this responsive to @group_size
  def cdc_primer_layout
    lyt = []
    3.times { |i| [0, 4].each { |j| 12.times { |k| lyt << [i + j, k] } } }
    lyt
  end
end
